PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TaskSwitching
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine cue_routine
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cue
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  Routine stimuli_routine
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimulus
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    KeyboardComponent response
      allowedKeys = 'z' , 'm'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback_routine
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    TextComponent feedback_test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $'Correct' if response.corr else 'Incorrect'
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  Routine end_routine_2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating!
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  Routine instruction_routine
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    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Task A: Press Z for odd numbers, M for even numbers.

        Task B: Press Z for vowels, M for consonants.

        Press 'space key' to start.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction_routine
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = TaskSwitching_Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 0, 'cue': 'Task A', 'correct_response': 'm', 'task_type': 'repeat '},
      {'stimulus': 'A', 'cue': 'Task B', 'correct_response': 'z', 'task_type': 'switch'},
      {'stimulus': 1, 'cue': 'Task A', 'correct_response': 'z', 'task_type': 'repeat '},
      {'stimulus': 'K', 'cue': 'Task B', 'correct_response': 'm', 'task_type': 'switch'},
      {'stimulus': 2, 'cue': 'Task A', 'correct_response': 'm', 'task_type': 'repeat '},
      {'stimulus': 'E', 'cue': 'Task B', 'correct_response': 'z', 'task_type': 'switch'},
      {'stimulus': 3, 'cue': 'Task A', 'correct_response': 'z', 'task_type': 'repeat '},
      {'stimulus': 'D', 'cue': 'Task B', 'correct_response': 'm', 'task_type': 'switch'},
      {'stimulus': 4, 'cue': 'Task A', 'correct_response': 'm', 'task_type': 'repeat '},
      {'stimulus': 'I', 'cue': 'Task B', 'correct_response': 'z', 'task_type': 'switch'},
      {'stimulus': 5, 'cue': 'Task A', 'correct_response': 'z', 'task_type': 'repeat '},
      {'stimulus': 'J', 'cue': 'Task B', 'correct_response': 'm', 'task_type': 'switch'},
      {'stimulus': 6, 'cue': 'Task A', 'correct_response': 'm', 'task_type': 'repeat '},
      {'stimulus': 'O', 'cue': 'Task B', 'correct_response': 'z', 'task_type': 'switch'},
      {'stimulus': 7, 'cue': 'Task A', 'correct_response': 'z', 'task_type': 'repeat '},
      {'stimulus': 'T', 'cue': 'Task B', 'correct_response': 'm', 'task_type': 'switch'},
      {'stimulus': 8, 'cue': 'Task A', 'correct_response': 'm', 'task_type': 'repeat '},
      {'stimulus': 'U', 'cue': 'Task B', 'correct_response': 'z', 'task_type': 'switch'}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
    Routine cue_routine
    Routine stimuli_routine
    Routine feedback_routine
  LoopTerminator trials
  Routine end_routine_2
